PsychoPy2experiment version="2021.2.3"
Settings
  Data file delimiter = semicolon
  Data filename = u'data/%s_%s_%s' % (expInfo['Pseudonym*'], expName, expInfo['date'])
  Experiment info = {'Pseudonym*': '', 'Age': '', 'Gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = ConstellationsNAI22
  keyboardBackend = ioHub
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Routines
  Routine intro1
    ImageComponent instruction1
      image = stimuli\intro1.PNG
      saveStartStop = False
      size = (1.3, 1.6)
      startVal [time (s)] = 0.0
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    MouseComponent mouse1
      clickable = button1,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.0
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    PolygonComponent button1
      fillColor = white
      pos = (0.5, -0.65)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 2.0
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    TextComponent button_txt1
      color = black
      letterHeight = 0.07
      pos = (0.5, -0.65)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Järgmine
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  Routine intro2
    ImageComponent instruction2
      image = stimuli\intro2.PNG
      saveStartStop = False
      size = (1.3, 1.6)
      startVal [time (s)] = 0.0
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    MouseComponent mouse2
      clickable = button2,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.0
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    PolygonComponent button2
      fillColor = white
      pos = (0.5, -0.65)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 2.0
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    TextComponent button_txt2
      color = black
      letterHeight = 0.07
      pos = (0.5, -0.65)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Järgmine
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  Routine pause
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        brush.reset();
      Begin Routine:
        brush.reset()
  Routine end
    TextComponent end_txt
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Tehtud. Suur tänu!
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  Routine coords
    ImageComponent testimage
      image [set every repeat] = stimuli\testobject.png
      pos = (-0.4, 0.0)
      size = (0.65,0.65)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_track0
      clickable = button4
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent button0
      fillColor = white
      pos = (0.5, -0.6)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_txt0
      color = black
      letterHeight = 0.07
      pos = (0.5, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Järgmine
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    MouseComponent mouse_next
      clickable = button4,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
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    TextComponent coord_txt
      color = black
      letterHeight = 0.08
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
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      text:
        Enne päris katsega alustamist kalibreerime pildi suuruse.
        Selleks tõmba hiirega pildi nurkadesse jooned (punasega tähistatud).
        Püüa tabada võimalikult täpselt pildi äärjoont!

        Kui oled kõik nurgad ära markeerinud, vajuta nupule "järgmine"
        ning siis alustame päris katsega!
    BrushComponent brush0
      buttonRequired = True
      lineColor = $[0,255,0]
      lineWidth = 3
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        // Hiire joonistuse muutujad
        mouse.xdraw = [];
        mouse.ydraw = [];
      Begin Routine:
        mouse.xdraw = []
        mouse.ydraw = []
      Each Frame:
        if button0.contains(mouse_next) and mouse_next.getPressed()[0] == 1:
            brush0.reset()

        if mouse_track0.leftButton[0] == 1:
            mouse.xdraw.append(mouse_track0.x[-1])
            mouse.ydraw.append(mouse_track0.y[-1])
      Each JS Frame:
        if ((button0.contains(mouse_next) && (mouse_next.getPressed()[0] === 1))) {
            brush0.reset();
        }


        // Lisa info

        if(mouse_track0.leftButton == 1){mouse.xdraw.push(mouse_track0.x)};
        if(mouse_track0.leftButton == 1){mouse.ydraw.push(mouse_track0.y)};
      End JS Routine:
        psychoJS.experiment.addData('mouse0.x_draw', mouse.xdraw);
        psychoJS.experiment.addData('mouse0.y_draw', mouse.ydraw);
      End Routine:
        thisExp.addData('mouse0.x_draw', mouse.xdraw)
        thisExp.addData('mouse0.y_draw', mouse.ydraw)
  Routine practice_rsp
    ImageComponent practice_object
      image = stimuli/practice_first.jpg
      pos = (0.0, 0.0)
      size = (0.65,0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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    ImageComponent practice_outline
      image = stimuli/solution1.jpg
      pos = (0.0, 0.0)
      size = (0.65,0.65)
      startVal [time (s)] = 2.0
      units = height
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text = Vastus: AUTO
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    MouseComponent mouse5
      clickable = button5,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.0
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    PolygonComponent button5
      fillColor = white
      pos = (0.5, -0.6)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 2.0
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    TextComponent button_txt5
      color = black
      letterHeight = 0.07
      pos = (0.5, -0.6)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Järgmine
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  Routine intro3
    ImageComponent instruction3
      image = stimuli\intro3.PNG
      saveStartStop = False
      size = (1.3, 1.6)
      startVal [time (s)] = 0.0
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    MouseComponent mouse3
      clickable = button3,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.0
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    PolygonComponent button3
      fillColor = white
      pos = (0.5, -0.65)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 2.0
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    TextComponent button_txt3
      color = black
      letterHeight = 0.07
      pos = (0.5, -0.65)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Järgmine
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  Routine practice_intro
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  Routine trial
    ImageComponent image
      image [set every repeat] = $stim
      pos = (-0.4, 0.0)
      size = (0.65,0.65)
      startVal [time (s)] = 0
      stopVal [time (s)] = 30
      units = height
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        stim = 0
        Version = 0
        vrs = str(randint(1,3)) #expInfo['Version (1 or 2)']

        print(vrs)
      Begin Routine:
        if vrs == '1':
            stim = stim1
        elif vrs == '2':
            stim = stim2

        #print(stim)
      End Routine:
        thisExp.addData('Version ' + str(vrs), Version)
    MouseComponent mouse_track
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    BrushComponent brush
      buttonRequired = True
      disabled = True
      lineWidth = 3
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent H1_textbox
      anchor = top-left
      bold = False
      borderColor = grey
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0.15, 0.5)
      saveStartStop = False
      size = (0.65,0.4)
      startVal [condition] = Yes == 1
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        RSP = 0;
        Valmis = 0;
        Yes = 0;
        Vihje = 0;
        Nupp = 0;
        frames = 0;
        buttons = 0;
        times = 0;
        location = 0;
        mouseIsDown = false;
        mouseIsDown1 = false;
        mouseIsDown2 = false;
        oldMouseIsDown = false;
        mouse_track.xdraw = [];
        mouse_track.ydraw = [];
        clear = [];
      Begin Routine:
        #luup = 0
        #print("luup 0")

        RSP = 0
        Valmis = 0
        Yes = 0
        Vihje = 0
        Nupp = 0
        frames = 0
        buttons = 0
        times = 0
        location = 0

        mouseIsDown = False
        mouseIsDown1 = False
        mouseIsDown2 = False
        oldMouseIsDown = False

        mouse_track.xdraw = []
        mouse_track.ydraw = []
        clear = []
      Each Frame:
        ## Hiire joonistus
        if mouse_track.getPressed()[0] == 1:
            mouse_track.xdraw.append(mouse_track.getPos()[0])
            mouse_track.ydraw.append(mouse_track.getPos()[1])

        if button_yes.contains(mouse) and mouse.getPressed()[0]:
            Yes = 1
            Nupp = 1

        if button_hint.contains(mouse) and mouse.getPressed()[0]:
            Vihje = 1
            Nupp = 1


        #check that participant has answered all Qs
        if Yes == 1:
            if RSP_ahhaa.getRating() != None and H1_textbox.text != '' and RSP_sudden.getRating() != None and RSP_pleasant.getRating() != None:
                Valmis = 1
        elif Vihje == 1:
            #if RSP_ahhaa.getRating() != None and RSP_sudden.getRating() != None and RSP_pleasant.getRating() != None:
            Valmis = 1
        #else:
        #    Valmis = 0

        #if RSP == 2 and RSP_ahhaa.getRating() != None:

        #oldMouseIsDown = False

        ## continue
        if button_next.contains(mouse_end) and mouse_end.getPressed()[0] == 1:
            mouseIsDown1 = True
            #mouseIsDown = mouse2.getPressed()[0]
                #mouse2.clickReset()
            if mouseIsDown1 and not oldMouseIsDown:
                #win.getMovieFrame()
                oldMouseIsDown = True
                #luup = 1
                #print("luup 1")
            #loop_1.finished = True
        else:
            mouseIsDown1 = False
            #continueRoutine = True

        ## clear brush:
        #if button_clear.contains(mouse) and mouse.getPressed()[0] == 1:
            #mouseIsDown = True
            #buttons, times = mouse.getPressed(getTime=True)
            #location = mouse_track.getPos()
            #if mouseIsDown and not oldMouseIsDown:

                #clear.append(location)
                #clear.append(times[0])
                #clear.append("clear")
                #win.getMovieFrame()
                #win.flip()
                #brush.reset()
            #attempt += 1


        #######
        ## restart



        if mouseIsDown2 == True:
            frames += 1
            #print(frames)
            if frames < 10:
                oldMouseIsDown = True
            else:
                mouseIsDown2 = False
                oldMouseIsDown = False
                frames = 0

        if mouseIsDown1 == True:
            frames += 1
            #print(frames)
            if frames < 10:
                oldMouseIsDown = True
            else:
                mouseIsDown1 = False
                oldMouseIsDown = False
                frames = 0

        if mouseIsDown == True:
            frames += 1
            #print(frames)
            if frames < 10:
                oldMouseIsDown = True
            else:
                mouseIsDown = False
                oldMouseIsDown = False
                frames = 0

        #else:
        #    mouseIsDown = False
        #if mouseIsDown2 and not oldMouseIsDown:#save data
        #        attempt += 1
        #        print(attempt)
        #        oldMouseIsDown = True

        #if RSP_yesno.getRating()=='Ei':
        #    Valmis = 1
        #elif RSP_yesno.getRating()=='Jah':
        #    if RSP_ahhaa.getRating() != None: #and Q2.text != '>':
        #        Valmis = 1
        #    else:
        #        Valmis = 0
        #else:
        #    Valmis = 0
      Each JS Frame:
        // Hiire joonistus
        if ((mouse_track.getPressed()[0] == 1)) {
            mouse_track.xdraw.push(mouse_track.getPos()[0]);
            mouse_track.ydraw.push(mouse_track.getPos()[1]);
        }

        // Leidsin või vihje nupp tegevus
        if ((button_yes.contains(mouse) && mouse.getPressed()[0])) {
            Yes = 1;
            Nupp = 1;
        }
        if ((button_hint.contains(mouse) && mouse.getPressed()[0])) {
            Vihje = 1;
            Nupp = 1;
        }

        // check that participant has answered all Qs
        if ((Yes == 1)) {
            if (((((RSP_ahhaa.getRating() != null) && (H1_textbox.text != "")) && (RSP_sudden.getRating() != null)) && (RSP_pleasant.getRating() != null))) {
                Valmis = 1;
            }
        } else {
            if ((Vihje === 1)) {
                //if ((((RSP_ahhaa.getRating() != null) && (RSP_sudden.getRating() != null)) && (RSP_pleasant.getRating() != null))) {
                Valmis = 1;
            }
        }

        // continue
        if ((button_next.contains(mouse_end) && (mouse_end.getPressed()[0] === 1))) {
            mouseIsDown1 = true;
            if ((mouseIsDown1 && (! oldMouseIsDown))) {
                oldMouseIsDown = true;
            }
        } else {
            mouseIsDown1 = false;
        }

        // clear brush
        if ((button_clear.contains(mouse) && (mouse.getPressed()[0] === 1))) {
            mouseIsDown = true;
            buttons, times = mouse.getPressed({"getTime": true});
            location = mouse_track.getPos();
            if ((mouseIsDown && (! oldMouseIsDown))) {
                clear.push(location);
                clear.push(times[0]);
                clear.push("clear");
                brush.reset();
            }
        }

        // restart
        if ((mouseIsDown2 === true)) {
            frames += 1;
            if ((frames < 10)) {
                oldMouseIsDown = true;
            } else {
                mouseIsDown2 = false;
                oldMouseIsDown = false;
                frames = 0;
            }
        }
        if ((mouseIsDown1 === true)) {
            frames += 1;
            if ((frames < 10)) {
                oldMouseIsDown = true;
            } else {
                mouseIsDown1 = false;
                oldMouseIsDown = false;
                frames = 0;
            }
        }
        if ((mouseIsDown === true)) {
            frames += 1;
            if ((frames < 10)) {
                oldMouseIsDown = true;
            } else {
                mouseIsDown = false;
                oldMouseIsDown = false;
                frames = 0;
            }
        }
      End JS Routine:
        psychoJS.experiment.addData("mouse1.x_draw", mouse_track.xdraw);
        psychoJS.experiment.addData("mouse1.y_draw", mouse_track.ydraw);
        psychoJS.experiment.addData("Clear pressed", clear);

        console.log(clear);

        KI = expInfo["Pseudonym*"];

        kk = (trials.thisN + 1);

        H1_textbox.refresh();
      End Routine:
        ## Salvesta joonistus
        thisExp.addData('mouse1.x_draw', mouse_track.xdraw)
        thisExp.addData('mouse1.y_draw', mouse_track.ydraw)
        thisExp.addData('Clear pressed', clear)

        print(clear)
        #luup = 1
        #print("luup 1")

        KI = expInfo['Pseudonym*']

        #file="KI"+KI+"_"+str(stim[8:11])+"-"+".png"
        #rep = loop_1.thisRepN + 1

        kk = trials.thisN + 1
        #file="ID"+KI+"_"+str(kk)+"_"+str(ID1)+"-"+str(rep)+".png"

        #print(file)
        #win.saveMovieFrames(file,clearFrames=True)

        #SEE LAHTI KOMMENTEERIDA VB
        #H1_textbox.refresh()
        #brush.reset()
    TextComponent juhis_txt
      color = black
      letterHeight = 0.07
      pos = (-0.45, 0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Vaata pilti ja püüa leida punktidesse peidetud objekt!
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    TextComponent hint1_txt
      color = red
      disabled = True
      letterHeight = 0.07
      pos = (0.25, 0.3)
      saveStartStop = False
      startVal [condition] = Vihje == 1
      text [set every repeat] = $Hint
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    TextComponent hint2_txt
      color = red
      disabled = True
      letterHeight = 0.07
      pos = (0.45, 0.3)
      saveStartStop = False
      startVal [condition] = Vihje == 1
      text [set every repeat] = $Hint
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    PolygonComponent button_clear
      disabled = True
      fillColor = white
      pos = (-0.2, -0.75)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent objekt_txt
      color = black
      letterHeight = 0.06
      pos = (0.4, 0.55)
      saveStartStop = False
      startVal [condition] = Yes == 1
      text = Mis objekti leidsid?
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    MouseComponent mouse
      clickable = button_clear, button_yes, button_hint
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent button_next
      fillColor = white
      pos = (0.7, -0.75)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [condition] = Valmis == 1
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    MouseComponent mouse_end
      clickable = button_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = Valmis==1
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    TextComponent clear_txt
      color = black
      disabled = True
      letterHeight = 0.06
      pos = (-0.2, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Kustuta
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    PolygonComponent button_hint
      fillColor = red
      pos = (0.6,0.6)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 5.00
      stopVal [condition] = Nupp == 1
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    TextComponent vihje_txt
      letterHeight = 0.06
      pos = (0.6,0.6)
      saveStartStop = False
      startVal [time (s)] = 5.0
      stopVal [condition] = Nupp == 1
      text [set every repeat] = Ei leidnud
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    PolygonComponent button_yes
      fillColor = green
      pos = (0.3,0.6)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = Nupp == 1
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    TextComponent leidsin_txt
      letterHeight = 0.06
      pos = (0.3,0.6)
      saveStartStop = False
      stopVal [condition] = Nupp == 1
      text [set every repeat] = Leidsin!
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    SliderComponent RSP_ahhaa
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Ei olnud ahhaa', 'Suur ahhaa'
      letterHeight = 0.04
      pos = (0.5, -0.04)
      saveStartStop = False
      size = (0.5, 0.06)
      startVal [condition] = Yes == 1
      storeHistory = True
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent ahhaa_txt
      color = black
      letterHeight = 0.06
      pos = (0.37, 0.05)
      saveStartStop = False
      startVal [condition] = Yes == 1
      text = Kas kogesid ahhaa-elamust?
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    SliderComponent RSP_sudden
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Üldse mitte järsku', 'Väga järsku'
      letterHeight = 0.04
      pos = (0.5, -0.29)
      saveStartStop = False
      size = (0.5, 0.06)
      startVal [condition] = Yes == 1
      storeHistory = True
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent sudden_txt
      color = black
      letterHeight = 0.06
      pos = (0.42, -0.22)
      saveStartStop = False
      startVal [condition] = Yes == 1
      text = Kui järsku lahendus pähe hüppas?
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    SliderComponent RSP_pleasant
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Üldse mitte kindel', 'Väga kindel' 
      letterHeight = 0.04
      pos = (0.5, -0.57)
      saveStartStop = False
      size = (0.5, 0.06)
      startVal [condition] = Yes == 1
      storeHistory = True
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent pleasant_txt
      color = black
      letterHeight = 0.06
      pos = (0.42, -0.49)
      saveStartStop = False
      startVal [condition] = Yes == 1
      text = Kui kindel oled, et vastus on õige?
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    TextComponent next_txt
      color = black
      letterHeight = 0.06
      pos = (0.7, -0.75)
      saveStartStop = False
      startVal [condition] = Valmis == 1
      text = Järgmine
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    TextComponent TimeUp_txt
      letterHeight = 0.07
      pos = (-0.4, 0.0)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 14
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      text:
        Aeg on täis!

        Palun vasta küsimustele.
    TextComponent timer1
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = 30
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    TextComponent timer2
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 1
      stopVal [time (s)] = 2
      text = 29
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    TextComponent timer3
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 2
      stopVal [time (s)] = 3
      text = 28
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    TextComponent timer4
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 3
      stopVal [time (s)] = 4
      text = 27
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    TextComponent timer5
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 4
      stopVal [time (s)] = 5
      text = 26
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    TextComponent timer6
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 5
      stopVal [time (s)] = 6
      text = 25
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    TextComponent timer7
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 6
      stopVal [time (s)] = 7
      text = 24
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    TextComponent timer8
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 7
      stopVal [time (s)] = 8
      text = 23
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    TextComponent timer9
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 8
      stopVal [time (s)] = 9
      text = 22
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    TextComponent timer10
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 9
      stopVal [time (s)] = 10
      text = 21
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    TextComponent timer11
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 10
      stopVal [time (s)] = 11
      text = 20
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    TextComponent timer12
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 11
      stopVal [time (s)] = 12
      text = 19
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    TextComponent timer13
      color = green
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 12
      stopVal [time (s)] = 13
      text = 18
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    TextComponent timer26
      color = red
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 25
      stopVal [time (s)] = 26
      text = 5
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    TextComponent timer27
      color = red
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 26
      stopVal [time (s)] = 27
      text = 4
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    TextComponent timer28
      color = red
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 27
      stopVal [time (s)] = 28
      text = 3
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    TextComponent timer29
      color = red
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 28
      stopVal [time (s)] = 29
      text = 2
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    TextComponent timer30
      color = red
      letterHeight = 0.1
      pos = (-0.78, -0.75)
      startVal [time (s)] = 29
      stopVal [time (s)] = 30
      text = 1
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  Routine practice_trial
    ImageComponent image_2
      image [set every repeat] = stimuli\practice_first.jpg
      pos = (-0.4, 0.0)
      saveStartStop = False
      size = (0.65,0.65)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
      units = height
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    BrushComponent brush_2
      buttonRequired = True
      disabled = True
      lineWidth = 3
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_track_2
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent H1_textbox_2
      anchor = top-left
      bold = False
      borderColor = grey
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0.15, 0.5)
      saveStartStop = False
      size = (0.65,0.4)
      startVal [condition] = Yes == 1
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        RSP = 0;
        Valmis = 0;
        Yes = 0;
        Vihje = 0;
        Nupp = 0;
        frames = 0;
        mouseIsDown = false;
        mouseIsDown1 = false;
        mouseIsDown2 = false;
        oldMouseIsDown = false;
      Begin Routine:
        #luup = 0
        #print("luup 0")


        RSP = 0
        Valmis = 0
        Yes = 0
        Vihje = 0
        Nupp = 0
        frames = 0

        mouseIsDown = False
        mouseIsDown1 = False
        mouseIsDown2 = False
        oldMouseIsDown = False

        #mouse_track.xdraw = []
        #mouse_track.ydraw = []

        #print(stim)
      Each Frame:
        if button_yes_2.contains(mouse_2) and mouse_2.getPressed()[0]:
            Yes = 1
            Nupp = 1

        if button_hint_2.contains(mouse_2) and mouse_2.getPressed()[0]:
            Vihje = 1
            Nupp = 1


        #check that participant has answered all Qs
        if Yes == 1:
            if RSP_ahhaa_2.getRating() != None and H1_textbox_2.text != '' and RSP_sudden_2.getRating() != None and RSP_pleasant_2.getRating() != None:
                Valmis = 1
        elif Vihje == 1:
            #if RSP_ahhaa_2.getRating() != None and RSP_sudden_2.getRating() != None and RSP_pleasant_2.getRating() != None:
            Valmis = 1
        #else:
        #    Valmis = 0

        #if RSP == 2 and RSP_ahhaa.getRating() != None:

        #oldMouseIsDown = False

        ## continue
        if button_next_2.contains(mouse_end_2) and mouse_end_2.getPressed()[0] == 1:
            mouseIsDown1 = True
            #mouseIsDown = mouse2.getPressed()[0]
                #mouse2.clickReset()
            if mouseIsDown1 and not oldMouseIsDown:
                #win.getMovieFrame()
                oldMouseIsDown = True
        else:
            mouseIsDown1 = False
            #continueRoutine = True

        ## clear brush:
        #if button_clear_2.contains(mouse_2) and mouse_2.getPressed()[0] == 1:
        #    mouseIsDown = True
        #    if mouseIsDown and not oldMouseIsDown:
                ##win.getMovieFrame()
                ##win.flip()
                #brush_2.reset()



        #######
        ## restart



        if mouseIsDown2 == True:
            frames += 1
            #print(frames)
            if frames < 10:
                oldMouseIsDown = True
            else:
                mouseIsDown2 = False
                oldMouseIsDown = False
                frames = 0

        if mouseIsDown1 == True:
            frames += 1
            #print(frames)
            if frames < 10:
                oldMouseIsDown = True
            else:
                mouseIsDown1 = False
                oldMouseIsDown = False
                frames = 0

        if mouseIsDown == True:
            frames += 1
            #print(frames)
            if frames < 10:
                oldMouseIsDown = True
            else:
                mouseIsDown = False
                oldMouseIsDown = False
                frames = 0
      Each JS Frame:
        if ((button_yes_2.contains(mouse_2) && mouse_2.getPressed()[0])) {
            Yes = 1;
            Nupp = 1;
        }
        if ((button_hint_2.contains(mouse_2) && mouse_2.getPressed()[0])) {
            Vihje = 1;
            Nupp = 1;
        }
        if ((Yes == 1)) {
            if (((((RSP_ahhaa_2.getRating() != null) && (H1_textbox_2.text != "")) && (RSP_sudden_2.getRating() != null)) && (RSP_pleasant_2.getRating() != null))) {
                Valmis = 1;
            }
        } else {
            if ((Vihje == 1)) {
                //if ((((RSP_ahhaa_2.getRating() != null) && (RSP_sudden_2.getRating() != null)) && (RSP_pleasant_2.getRating() != null))) {
                Valmis = 1;
            }
        }

        if ((button_next_2.contains(mouse_end_2) && (mouse_end_2.getPressed()[0] == 1))) {
            mouseIsDown1 = true;
            if ((mouseIsDown1 && (! oldMouseIsDown))) {
                oldMouseIsDown = true;
            }
        } else {
            mouseIsDown1 = false;
        }
        if ((button_clear_2.contains(mouse_2) && (mouse_2.getPressed()[0] == 1))) {
            mouseIsDown = true;
            if ((mouseIsDown && (! oldMouseIsDown))) {
                brush_2.reset();
            }
        }
        if ((mouseIsDown2 == true)) {
            frames += 1;
            if ((frames < 10)) {
                oldMouseIsDown = true;
            } else {
                mouseIsDown2 = false;
                oldMouseIsDown = false;
                frames = 0;
            }
        }
        if ((mouseIsDown1 == true)) {
            frames += 1;
            if ((frames < 10)) {
                oldMouseIsDown = true;
            } else {
                mouseIsDown1 = false;
                oldMouseIsDown = false;
                frames = 0;
            }
        }
        if ((mouseIsDown == true)) {
            frames += 1;
            if ((frames < 10)) {
                oldMouseIsDown = true;
            } else {
                mouseIsDown = false;
                oldMouseIsDown = false;
                frames = 0;
            }
        }
      End JS Routine:
        H1_textbox_2.refresh();
        brush_2.reset();
      End Routine:
        #H1_textbox_2.refresh()
        #brush_2.reset()
    TextComponent juhis_txt_2
      color = black
      letterHeight = 0.07
      pos = (-0.45, 0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Vaata pilti ja püüa leida punktidesse peidetud objekt!
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    TextComponent hint1_txt_2
      color = red
      disabled = True
      letterHeight = 0.07
      pos = (0.35, 0.3)
      saveStartStop = False
      startVal [condition] = Vihje == 1
      text [set every repeat] = Pildil on: KÄNGURU
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    TextComponent hint2_txt_2
      color = red
      disabled = True
      letterHeight = 0.07
      pos = (0.45, 0.3)
      saveStartStop = False
      startVal [condition] = Vihje == 1
      text [set every repeat] = Kindad
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    PolygonComponent button_clear_2
      disabled = True
      fillColor = white
      pos = (-0.2, -0.75)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent objekt_txt_2
      color = black
      letterHeight = 0.06
      pos = (0.4, 0.55)
      saveStartStop = False
      startVal [condition] = Yes == 1
      text = Mis objekti leidsid?
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    MouseComponent mouse_2
      clickable = button_clear_2, button_yes_2, button_hint_2
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent button_next_2
      fillColor = white
      pos = (0.7, -0.75)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [condition] = Valmis == 1
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    MouseComponent mouse_end_2
      clickable = button_next_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = Valmis==1
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    TextComponent clear_txt_2
      color = black
      disabled = True
      letterHeight = 0.06
      pos = (-0.2, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Kustuta
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    PolygonComponent button_hint_2
      fillColor = red
      pos = (0.6,0.6)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 5.0
      stopVal [condition] = Nupp == 1
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    TextComponent vihje_txt_2
      letterHeight = 0.06
      pos = (0.6,0.6)
      saveStartStop = False
      startVal [time (s)] = 5.0
      stopVal [condition] = Nupp == 1
      text [set every repeat] = Ei leidnud
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    PolygonComponent button_yes_2
      fillColor = green
      pos = (0.3,0.6)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = Nupp == 1
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    TextComponent leidsin_txt_2
      letterHeight = 0.06
      pos = (0.3,0.6)
      saveStartStop = False
      stopVal [condition] = Nupp == 1
      text [set every repeat] = Leidsin!
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    SliderComponent RSP_ahhaa_2
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Ei olnud ahhaa', 'Suur ahhaa'
      letterHeight = 0.04
      pos = (0.5, -0.04)
      saveStartStop = False
      size = (0.5, 0.06)
      startVal [condition] = Yes == 1
      storeHistory = True
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent ahhaa_txt_2
      color = black
      letterHeight = 0.06
      pos = (0.37, 0.05)
      saveStartStop = False
      startVal [condition] = Yes == 1
      text = Kas kogesid ahhaa-elamust?
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    SliderComponent RSP_sudden_2
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Üldse mitte järsku', 'Väga järsku'
      letterHeight = 0.04
      pos = (0.5, -0.29)
      saveStartStop = False
      size = (0.5, 0.06)
      startVal [condition] = Yes == 1
      storeHistory = True
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent sudden_txt_2
      color = black
      letterHeight = 0.06
      pos = (0.42, -0.22)
      saveStartStop = False
      startVal [condition] = Yes == 1
      text = Kui järsku lahendus pähe hüppas?
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    SliderComponent RSP_pleasant_2
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Üldse mitte kindel', 'Väga kindel' 
      letterHeight = 0.04
      pos = (0.5, -0.57)
      saveStartStop = False
      size = (0.5, 0.06)
      startVal [condition] = Yes == 1
      storeHistory = True
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent pleasant_txt_2
      color = black
      letterHeight = 0.06
      pos = (0.42, -0.49)
      saveStartStop = False
      startVal [condition] = Yes == 1
      text = Kui kindel oled, et vastus on õige?
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    TextComponent next_txt_2
      color = black
      letterHeight = 0.06
      pos = (0.7, -0.75)
      saveStartStop = False
      startVal [condition] = Valmis == 1
      text = Järgmine
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  Routine practice_trial2
    ImageComponent image_3
      image = stimuli/practice_second.jpg
      pos = (-0.4, 0.0)
      size = (0.65,0.65)
      startVal [time (s)] = 0.0
      units = height
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    BrushComponent brush_3
      buttonRequired = True
      lineWidth = 3
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_track_3
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent H1_textbox_3
      anchor = top-left
      bold = False
      borderColor = grey
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0.15, 0.5)
      saveStartStop = False
      size = (0.65,0.4)
      startVal [condition] = Yes == 1
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        RSP = 0;
        Valmis = 0;
        Yes = 0;
        Vihje = 0;
        Nupp = 0;
        frames = 0;
        mouseIsDown = false;
        mouseIsDown1 = false;
        mouseIsDown2 = false;
        oldMouseIsDown = false;
      Begin Routine:
        #luup = 0
        #print("luup 0")

        RSP = 0
        Valmis = 0
        Yes = 0
        Vihje = 0
        Nupp = 0
        frames = 0

        mouseIsDown = False
        mouseIsDown1 = False
        mouseIsDown2 = False
        oldMouseIsDown = False

        #mouse_track.xdraw = []
        #mouse_track.ydraw = []

        #print(stim)
      Each Frame:
        if button_yes_3.contains(mouse_3) and mouse_3.getPressed()[0]:
            Yes = 1
            Nupp = 1

        if button_hint_3.contains(mouse_3) and mouse_3.getPressed()[0]:
            Vihje = 1
            Nupp = 1


        #check that participant has answered all Qs
        if Yes == 1:
            if RSP_ahhaa_3.getRating() != None and H1_textbox_3.text != '' and RSP_sudden_3.getRating() != None and RSP_pleasant_3.getRating() != None:
                Valmis = 1
        elif Vihje == 1:
            if RSP_ahhaa_3.getRating() != None and RSP_sudden_3.getRating() != None and RSP_pleasant_3.getRating() != None:
                Valmis = 1
        else:
            Valmis = 0

        #if RSP == 2 and RSP_ahhaa.getRating() != None:

        #oldMouseIsDown = False

        ## continue
        if button_next_3.contains(mouse_end_3) and mouse_end_3.getPressed()[0] == 1:
            mouseIsDown1 = True
            #mouseIsDown = mouse2.getPressed()[0]
                #mouse2.clickReset()
            if mouseIsDown1 and not oldMouseIsDown:
                #win.getMovieFrame()
                oldMouseIsDown = True
        else:
            mouseIsDown1 = False
            #continueRoutine = True

        ## clear brush:
        if button_clear_3.contains(mouse_3) and mouse_3.getPressed()[0] == 1:
            mouseIsDown = True
            if mouseIsDown and not oldMouseIsDown:
                #win.getMovieFrame()
                #win.flip()
                brush_3.reset()
            #attempt += 1


        #######
        ## restart



        if mouseIsDown2 == True:
            frames += 1
            #print(frames)
            if frames < 10:
                oldMouseIsDown = True
            else:
                mouseIsDown2 = False
                oldMouseIsDown = False
                frames = 0

        if mouseIsDown1 == True:
            frames += 1
            #print(frames)
            if frames < 10:
                oldMouseIsDown = True
            else:
                mouseIsDown1 = False
                oldMouseIsDown = False
                frames = 0

        if mouseIsDown == True:
            frames += 1
            #print(frames)
            if frames < 10:
                oldMouseIsDown = True
            else:
                mouseIsDown = False
                oldMouseIsDown = False
                frames = 0
      Each JS Frame:
        if ((button_yes_3.contains(mouse_3) && mouse_3.getPressed()[0])) {
            Yes = 1;
            Nupp = 1;
        }
        if ((button_hint_3.contains(mouse_3) && mouse_3.getPressed()[0])) {
            Vihje = 1;
            Nupp = 1;
        }
        if ((Yes == 1)) {
            if (((((RSP_ahhaa_3.getRating() != null) && (H1_textbox_3.text != "")) && (RSP_sudden_3.getRating() != null)) && (RSP_pleasant_3.getRating() != null))) {
                Valmis = 1;
            }
        } else {
            if ((Vihje == 1)) {
                if ((((RSP_ahhaa_3.getRating() != null) && (RSP_sudden_3.getRating() != null)) && (RSP_pleasant_3.getRating() != null))) {
                    Valmis = 1;
                }
            } else {
                Valmis = 0;
            }
        }
        if ((button_next_3.contains(mouse_end_3) && (mouse_end_3.getPressed()[0] == 1))) {
            mouseIsDown1 = true;
            if ((mouseIsDown1 && (! oldMouseIsDown))) {
                oldMouseIsDown = true;
            }
        } else {
            mouseIsDown1 = false;
        }
        if ((button_clear_3.contains(mouse_3) && (mouse_3.getPressed()[0] == 1))) {
            mouseIsDown = true;
            if ((mouseIsDown && (! oldMouseIsDown))) {
                brush_3.reset();
            }
        }
        if ((mouseIsDown2 == true)) {
            frames += 1;
            if ((frames < 10)) {
                oldMouseIsDown = true;
            } else {
                mouseIsDown2 = false;
                oldMouseIsDown = false;
                frames = 0;
            }
        }
        if ((mouseIsDown1 == true)) {
            frames += 1;
            if ((frames < 10)) {
                oldMouseIsDown = true;
            } else {
                mouseIsDown1 = false;
                oldMouseIsDown = false;
                frames = 0;
            }
        }
        if ((mouseIsDown == true)) {
            frames += 1;
            if ((frames < 10)) {
                oldMouseIsDown = true;
            } else {
                mouseIsDown = false;
                oldMouseIsDown = false;
                frames = 0;
            }
        }
      End JS Routine:
        H1_textbox_3.refresh();
        brush_3.reset();
      End Routine:
        #H1_textbox_3.refresh()
        brush_3.reset()
    TextComponent juhis_txt_3
      color = black
      letterHeight = 0.07
      pos = (-0.4, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Leia pildilt objekt ja joonista hiirega selle kontuur!
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    TextComponent hint1_txt_3
      color = red
      letterHeight = 0.07
      pos = (0.35, 0.3)
      saveStartStop = False
      startVal [condition] = Vihje == 1
      text [set every repeat] = Pildil on: AUTO
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    TextComponent hint2_txt_3
      color = red
      disabled = True
      letterHeight = 0.07
      pos = (0.45, 0.3)
      saveStartStop = False
      startVal [condition] = Vihje == 1
      text [set every repeat] = Kindad
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    PolygonComponent button_clear_3
      fillColor = white
      pos = (-0.2, -0.75)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent objekt_txt_3
      color = black
      letterHeight = 0.06
      pos = (0.35, 0.55)
      saveStartStop = False
      startVal [condition] = Yes == 1
      text = Mis objekti leidsid?
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    MouseComponent mouse_3
      clickable = button_clear_2, button_yes_2, button_hint_2
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent button_next_3
      fillColor = white
      pos = (0.7, -0.75)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [condition] = Valmis == 1
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    MouseComponent mouse_end_3
      clickable = button_next_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = Valmis==1
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    TextComponent clear_txt_3
      color = black
      letterHeight = 0.06
      pos = (-0.2, -0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Kustuta
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    PolygonComponent button_hint_3
      fillColor = red
      pos = (0.6,0.6)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 2.0
      stopVal [condition] = Nupp == 1
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    TextComponent vihje_txt_3
      letterHeight = 0.06
      pos = (0.6,0.6)
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [condition] = Nupp == 1
      text [set every repeat] = Vihje
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    PolygonComponent button_yes_3
      fillColor = green
      pos = (0.3,0.6)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = Nupp == 1
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    TextComponent leidsin_txt_3
      letterHeight = 0.06
      pos = (0.3,0.6)
      saveStartStop = False
      stopVal [condition] = Nupp == 1
      text [set every repeat] = Leidsin!
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    SliderComponent RSP_ahhaa_3
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Ei olnud ahhaa', 'Suur ahhaa!'
      letterHeight = 0.04
      pos = (0.5, -0.05)
      saveStartStop = False
      size = (0.5, 0.06)
      startVal [condition] = Nupp == 1
      storeHistory = True
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8)
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    TextComponent ahhaa_txt_3
      color = black
      letterHeight = 0.06
      pos = (0.4, 0.05)
      saveStartStop = False
      startVal [condition] = Nupp == 1
      text = Kas kogesid ahhaa-elamust?
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    SliderComponent RSP_sudden_3
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Üldse mitte järsku', 'Väga järsku'
      letterHeight = 0.04
      pos = (0.5, -0.3)
      saveStartStop = False
      size = (0.5, 0.06)
      startVal [condition] = Nupp == 1
      storeHistory = True
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8)
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    TextComponent sudden_txt_3
      color = black
      letterHeight = 0.06
      pos = (0.37, -0.2)
      saveStartStop = False
      startVal [condition] = Nupp == 1
      text = Kui järsku objekti nägid?
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    SliderComponent RSP_pleasant_3
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Üldse mitte meeldiv', 'Väga meeldiv'
      letterHeight = 0.04
      pos = (0.5, -0.55)
      saveStartStop = False
      size = (0.5, 0.06)
      startVal [condition] = Nupp == 1
      storeHistory = True
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8)
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    TextComponent pleasant_txt_3
      color = black
      letterHeight = 0.06
      pos = (0.51, -0.45)
      saveStartStop = False
      startVal [condition] = Nupp == 1
      text = Kui meeldiv tunne tekkis, kui objekti nägid?
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    TextComponent next_txt_3
      color = black
      letterHeight = 0.06
      pos = (0.7, -0.75)
      saveStartStop = False
      startVal [condition] = Valmis == 1
      text = Järgmine
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  Routine practice_rsp2
    ImageComponent practice_object_2
      image = stimuli/practice_second.jpg
      pos = (0.0, 0.0)
      size = (0.65,0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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    ImageComponent practice_outline_2
      image = stimuli/solution2.jpg
      pos = (0.0, 0.0)
      size = (0.65,0.65)
      startVal [time (s)] = 2.0
      units = height
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    TextComponent text_3
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text = Pildil oli peidus auto!
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    MouseComponent mouse5_2
      clickable = button5_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.0
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    PolygonComponent button5_2
      fillColor = white
      pos = (0.5, -0.6)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 2.0
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    TextComponent button_txt5_2
      color = black
      letterHeight = 0.07
      pos = (0.5, -0.6)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Järgmine
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  Routine exp_intro
    ImageComponent instruction4_2
      image = stimuli\intro5.PNG
      saveStartStop = False
      size = (1.3, 1.6)
      startVal [time (s)] = 0.0
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    MouseComponent mouse4_2
      clickable = button4_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.0
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    PolygonComponent button4_2
      fillColor = white
      pos = (0.5, -0.65)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 2.0
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    TextComponent button_txt4_2
      color = black
      letterHeight = 0.07
      pos = (0.5, -0.65)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Järgmine
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  Routine intro0
    ImageComponent instruction1_2
      image = stimuli\intro0.PNG
      saveStartStop = False
      size = (1.3, 1.6)
      startVal [time (s)] = 0.0
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    MouseComponent mouse1_2
      clickable = button1_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent button1_2
      fillColor = white
      pos = (0.5, -0.65)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_txt1_2
      color = black
      letterHeight = 0.07
      pos = (0.5, -0.65)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Järgmine
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Flow
  Routine intro0
  Routine intro1
  Routine intro2
  Routine intro3
  Routine practice_intro
  Routine practice_trial
  Routine practice_rsp
  Routine exp_intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_online.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trl', 1), ('stim1', 'stimuli/dolphin_14s_9.jpg'), ('stim2', 'stimuli/dolphin_14s_11.jpg'), ('stimulus', 'dolphin_14s_')]),
      OrderedDict([('trl', 2), ('stim1', 'stimuli/mask_12s_9.jpg'), ('stim2', 'stimuli/mask_12s_11.jpg'), ('stimulus', 'mask_12s_')]),
      OrderedDict([('trl', 3), ('stim1', 'stimuli/puppy_12s_9.jpg'), ('stim2', 'stimuli/puppy_12s_11.jpg'), ('stimulus', 'puppy_12s_')]),
      OrderedDict([('trl', 4), ('stim1', 'stimuli/penguin_12s_9.jpg'), ('stim2', 'stimuli/penguin_12s_11.jpg'), ('stimulus', 'penguin_12s_')]),
      OrderedDict([('trl', 5), ('stim1', 'stimuli/horse_08s_9.jpg'), ('stim2', 'stimuli/horse_08s_11.jpg'), ('stimulus', 'horse_08s_')]),
      OrderedDict([('trl', 6), ('stim1', 'stimuli/kangaroo_02s_9.jpg'), ('stim2', 'stimuli/kangaroo_02s_11.jpg'), ('stimulus', 'kangaroo_02s_')]),
      OrderedDict([('trl', 7), ('stim1', 'stimuli/bag_04s_9.jpg'), ('stim2', 'stimuli/bag_04s_11.jpg'), ('stimulus', 'bag_04s_')]),
      OrderedDict([('trl', 8), ('stim1', 'stimuli/recliner_10s_9.jpg'), ('stim2', 'stimuli/recliner_10s_11.jpg'), ('stimulus', 'recliner_10s_')]),
      OrderedDict([('trl', 9), ('stim1', 'stimuli/racehorse_07s_9.jpg'), ('stim2', 'stimuli/racehorse_07s_11.jpg'), ('stimulus', 'racehorse_07s_')]),
      OrderedDict([('trl', 10), ('stim1', 'stimuli/bottle_02n_9.jpg'), ('stim2', 'stimuli/bottle_02n_11.jpg'), ('stimulus', 'bottle_02n_')]),
      OrderedDict([('trl', 11), ('stim1', 'stimuli/anchor_02s_9.jpg'), ('stim2', 'stimuli/anchor_02s_11.jpg'), ('stimulus', 'anchor_02s_')])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
    Routine trial
  LoopTerminator trials
  Routine pause
  Routine end
